PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'computer': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = comp
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine choice_trial
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    PolygonComponent r_1
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (r_1_x, r_1_y)
      shape = rectangle
      size [set every repeat] = (w_1_tmp, h_1_tmp)
      startVal [time (s)] = $isi
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    PolygonComponent r_2
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (r_2_x, r_2_y)
      shape = rectangle
      size [set every repeat] = (w_2_tmp, h_2_tmp)
      startVal [time (s)] = $isi
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    PolygonComponent r_3
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (r_3_x, r_3_y)
      shape = rectangle
      size [set every repeat] = (w_3_tmp, h_3_tmp)
      startVal [time (s)] = $isi
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    TextComponent r_1_label
      color [set every repeat] = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      pos [set every repeat] = (r_1_txt_x, r_1_txt_y)
      startVal [time (s)] = $isi
      text = 1
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    TextComponent r_2_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      pos [set every repeat] = (r_2_txt_x, r_2_txt_y)
      startVal [time (s)] = $isi
      text = 2
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    TextComponent r_3_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 20
      pos [set every repeat] = (r_3_txt_x, r_3_txt_y)
      startVal [time (s)] = $isi
      text = 3
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    TextComponent prompt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 35
      pos [set every repeat] = (prompt_x_loc, prompt_y_loc)
      startVal [time (s)] = $isi
      text = Which rectangle has the largest area?
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    KeyboardComponent rect_choice
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pre_trial
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    CodeComponent rect_dims
      Code Type = Auto->JS
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      Begin Routine:
        # rectangle dimensions depending on effect (trial type)
        # 4 possible options:
        # critical - experimental trials - predefined dimension values
        # filler random - randomly sample 3 stimuli anywhere in stimulus space
        # filler square - randomly sample 1 square and 2 smaller rectangles
        # catch - randomly sample 1 stimulus from upper diagonal and 2 from lower diagonals

        if effect=="critical":
            h_1_tmp=h_1
            w_1_tmp=w_1
            h_2_tmp=h_2
            w_2_tmp=w_2
            h_3_tmp=h_3
            w_3_tmp=w_3
        elif effect=="filler_random":
            h_1_tmp=np.random.uniform(dim_min,dim_max,1)[0]
            w_1_tmp=np.random.uniform(dim_min,dim_max,1)[0]
            h_2_tmp=np.random.uniform(dim_min,dim_max,1)[0]
            w_2_tmp=np.random.uniform(dim_min,dim_max,1)[0]
            h_3_tmp=np.random.uniform(dim_min,dim_max,1)[0]
            w_3_tmp=np.random.uniform(dim_min,dim_max,1)[0]
        elif effect=="filler_square":
            # have to randomly select where the square goes
            which_large=np.random.choice(np.arange(3))

            # randomly sample square and then sample other rectangles from U[dim_min, square size]
            if which_large==0:
                h_1_tmp=np.random.uniform(dim_min, dim_max,1)[0]
                w_1_tmp=h_1_tmp
                h_2_tmp=np.random.uniform(dim_min,h_1_tmp,1)[0]
                w_2_tmp=np.random.uniform(dim_min,h_1_tmp,1)[0]
                h_3_tmp=np.random.uniform(dim_min,h_1_tmp,1)[0]
                w_3_tmp=np.random.uniform(dim_min,h_1_tmp,1)[0]
            elif which_large==1:
                h_2_tmp=np.random.uniform(dim_min, dim_max,1)[0]
                w_2_tmp=h_2_tmp
                h_1_tmp=np.random.uniform(dim_min,h_2_tmp,1)[0]
                w_1_tmp=np.random.uniform(dim_min,h_2_tmp,1)[0]
                h_3_tmp=np.random.uniform(dim_min,h_2_tmp,1)[0]
                w_3_tmp=np.random.uniform(dim_min,h_2_tmp,1)[0]
            elif which_large==2:
                h_3_tmp=np.random.uniform(dim_min, dim_max,1)[0]
                w_3_tmp=h_3_tmp
                h_1_tmp=np.random.uniform(dim_min,h_3_tmp,1)[0]
                w_1_tmp=np.random.uniform(dim_min,h_3_tmp,1)[0]
                h_2_tmp=np.random.uniform(dim_min,h_3_tmp,1)[0]
                w_2_tmp=np.random.uniform(dim_min,h_3_tmp,1)[0]
        elif effect=="catch":
            # randomly sample a stimulus from upper and lower diagonals
            u_1=sample_diag(d2_r, d2_int)
            l_1=sample_diag(d1_r, d1_int)
            l_2=sample_diag(d1_r, d1_int)

            # then randomly assign position of upper
            # other 2 positions don't matter
            which_upper=np.random.choice(np.arange(3))
            if which_upper==0:
                w_1_tmp=u_1[0]
                h_1_tmp=u_1[1]
                w_2_tmp=l_1[0]
                h_2_tmp=l_1[1]
                w_3_tmp=l_2[0]
                h_3_tmp=l_2[1]
            elif which_upper==1:
                w_1_tmp=l_1[0]
                h_1_tmp=l_1[1]
                w_2_tmp=u_1[0]
                h_2_tmp=u_1[1]
                w_3_tmp=l_2[0]
                h_3_tmp=l_2[1]
            elif which_upper==2:
                w_1_tmp=l_1[0]
                h_1_tmp=l_1[1]
                w_2_tmp=l_2[0]
                h_2_tmp=l_2[1]
                w_3_tmp=u_1[0]
                h_3_tmp=u_1[1]

        print("=========NEW TRIAL=========")
        print(effect)
        print(order)
        print("distance")
        print(distance)

        print("h1")
        print(h_1_tmp)
        print("w1")
        print(w_1_tmp)

        print("h2")
        print(h_2_tmp)
        print("w2")
        print(w_2_tmp)

        print("h3")
        print(h_3_tmp)
        print("w3")
        print(w_3_tmp)

        # add params to data
        # heights and widths already stored for critical, but not other trial types
        thisExp.addData('h_1_tmp',h_1_tmp)
        thisExp.addData('w_1_tmp',w_1_tmp)
        thisExp.addData('h_2_tmp',h_2_tmp)
        thisExp.addData('w_2_tmp',w_2_tmp)
        thisExp.addData('h_3_tmp',h_3_tmp)
        thisExp.addData('w_3_tmp',w_3_tmp)
    CodeComponent rect_locs
      Code Type = Auto->JS
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      Begin Routine:
        # figure out rectangle locations
        # this is a PAIN

        # config_tmp - main configuration (fully balanced)
        # config_tmp - secondary configuration (randomized)

        # config_tmp predefined for critical trials but not other trials
        if effect == "critical":
            config_tmp = config
        else:
            config_tmp = np.random.choice([1, 2.1, 2.2, 3, 4])

        # figuring out the center or the left and right hand of the screen
        ctr_left = -round(screen_width*.5*.5)
        ctr_right= round(screen_width*.5*.5)

        # configuration 1: all 3 stimui next to each other
        if config_tmp == 1:
            config_tmp_1 = np.random.choice([1.1, 1.2, 1.3])

            # 1.1: stimuli on upper left of screen
            if config_tmp_1 == 1.1:
                r_2_x = ctr_left
                r_1_x= round(r_2_x - .5*w_2_tmp - .5*w_1_tmp - rect_dist)
                r_3_x= round(r_2_x +.5*w_2_tmp + .5*w_3_tmp + rect_dist)
                r_1_y = round((.5 * screen_height *.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_2_y = round((.5 * screen_height *.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_3_y = round((.5 * screen_height *.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
            # 1.2 - stimuli in center of screen
            elif config_tmp_1 == 1.2:
                r_1_x = round(-.5 * w_1_tmp - rect_dist - .5 * w_2_tmp)
                r_2_x = 0
                r_3_x = round(.5 * w_2_tmp + rect_dist + .5 * w_3_tmp)
                r_1_y = round(0 + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_2_y = round(0 + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_3_y = round(0 + np.random.uniform(-y_jitter, y_jitter, 1)[0])
            # 1.3 - stimuli in lower right of screen
            elif config_tmp_1 == 1.3:
                r_2_x = ctr_right
                r_1_x=round(r_2_x - .5*w_2_tmp - .5*w_1_tmp - rect_dist)
                r_3_x=round(r_2_x +.5*w_2_tmp + .5*w_3_tmp + rect_dist)
                r_1_y = -round((.5 * screen_height *.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_2_y = -round((.5 * screen_height *.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_3_y = -round((.5 * screen_height *.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
            # configuration 2 - only 2 stimuli comparable
            # 2.1 - stimuli 1 and 2 are comparable
        elif config_tmp == 2.1:
            config_tmp_1 = np.random.choice([2.11, 2.12])
            r_1_x = round(- .5*w_1_tmp - rect_dist - .5*w_2_tmp)
            r_2_x = 0
            r_3_x = round(.5*w_2_tmp +rect_dist + .5*w_3_tmp)
            # 2.11 - stimuli 1 and 2 are comparable, but placed in upper left of screen
            # stimulus 3 in bottom left
            if config_tmp_1 == 2.11:
                r_1_y = round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_2_y = round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_3_y = -round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
            # 2.12 - stimuli 1 and 2 are comparable, but placed in lower left of screen
            # stimulus 3 in upper left
            elif config_tmp_1 == 2.12:
                r_1_y = -round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_2_y = -round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_3_y = round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
            # 2.2 - stimuli 2 and 3 are comparable
        elif config_tmp == 2.2:
            r_1_x = round(- .5*w_1_tmp - rect_dist - .5*w_2_tmp)
            r_2_x = 0
            r_3_x = round(.5*w_2_tmp +rect_dist + .5*w_3_tmp)
            # 2.21 stimuli 2 and 3 next to each other in upper right of screen
            config_tmp_1 = np.random.choice([2.21, 2.22])
            if config_tmp_1 == 2.21:
                r_1_y = -round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_2_y = round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_3_y = round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
            # 2.22 - stimuli 2 and 3 next to each other in bottom right of screen
            elif config_tmp_1 == 2.22:
                r_1_y = round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_2_y = -round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_3_y = -round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
        # configuration 3 - no stimuli are comparable
        elif config_tmp == 3:
            config_tmp_1 = np.random.choice([3.1, 3.2])
            r_2_x = 0
            r_1_x = round(r_2_x - .5*w_2_tmp - rect_dist - .5*w_1_tmp)
            r_3_x = round(r_2_x +.5*w_2_tmp + rect_dist + .5*w_3_tmp)
            # 3.1 - stimulus 1 upper left, 2 center, 3 bottom right
            if config_tmp_1 == 3.1:
                r_1_y = round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_2_y = round(np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_3_y = -round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
            # 3.2 - stimulus 1 bottom left, 2 center, 3 upper right
            elif config_tmp_1 == 3.2:
                r_1_y = -round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_2_y = round(np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_3_y = round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
            # configuration 4 - triangle (spektor 2018 style)
        elif config_tmp == 4:
            config_tmp_1 = np.random.choice([4.1, 4.2])
            r_2_x = 0
            r_1_x = round(r_2_x - .5*w_2_tmp - rect_dist - .5*w_1_tmp)
            r_3_x = round(r_2_x +.5*w_2_tmp + rect_dist + .5*w_3_tmp)
            # 4.1 - regular triangle
            if config_tmp_1 == 4.1:
                r_1_y = -round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_2_y = round(np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_3_y = -round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
            # 4.2 - inverted triangle
            elif config_tmp_1==4.2:
                r_1_y = round(np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_3_y = round(np.random.uniform(-y_jitter, y_jitter, 1)[0])
                r_2_y = -round((.5 * screen_height*.5) + np.random.uniform(-y_jitter, y_jitter, 1)[0])
        # text locations
        r_1_txt_x=r_1_x
        r_1_txt_y=r_1_y-.5*h_1_tmp-25
        r_2_txt_x=r_2_x
        r_2_txt_y=r_2_y-.5*h_2_tmp-25
        r_3_txt_x=r_3_x
        r_3_txt_y=r_3_y-.5*h_3_tmp-25

        thisExp.addData('config_tmp',config_tmp)
        thisExp.addData('config_tmp_1',config_tmp_1)
        thisExp.addData('r_1_x',r_1_x)
        thisExp.addData('r_1_y',r_1_y)
        thisExp.addData('r_2_x',r_2_x)
        thisExp.addData('r_2_y',r_2_y)
        thisExp.addData('r_3_x',r_3_x)
        thisExp.addData('r_3_y',r_3_y)
  Routine exp_params
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    CodeComponent params
      Code Type = Auto->JS
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      Begin Experiment:
        # setting constant parameters for the experiment
        import psychopy
        import numpy as np

        # lower diagonal for catch trials
        d1_r=np.arange(57,133)

        # upper diagonal for catch trials
        d2_r=np.arange(125,200)

        # intercept for lower diagonal for catch trials
        d1_int=190

        # intercept for upper diagonal for catch trials
        d2_int=325

        # lowest dimension size possible on fillers
        dim_min = 57

        # larrgest dimension size possible on fillers
        dim_max = 200

        # screen params
        screen_width=win.size[0]
        screen_height=win.size[1]
        screen_center_x=0
        screen_center_y=0

        # distance between rectangles on x axis
        rect_dist_perc = .10
        rect_dist=round(rect_dist_perc*(.5*screen_width))

        # jitter for rectangle y position
        y_jitter=20

        # prompt text on each trial
        prompt_x_loc=0
        prompt_y_loc=-round(screen_height * .5)+80

        # inter-stimulus interval in secs
        isi=.15
    CodeComponent fncs_
      Code Type = Auto->JS
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      Begin Experiment:
        # function to sample stimulus from the diagonal
        # requires a diagonal range and an intercept
        def sample_diag (d, intcpt):
            w=np.random.choice(d)
            h=intcpt-w
            stim=np.array([w,h])
            return stim
  Routine consent
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    ButtonComponent agree_button
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 20
      pos = (-75, -500)
      size = 100,100
      startVal [time (s)] = 0
      text = I agree
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    ButtonComponent decline_button
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 20
      pos = 75,-500
      size = 100,100
      startVal [time (s)] = 0
      text = I do not agree
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    ImageComponent consent_img
      anchor = bottom-center
      image = consent.png
      pos = (0, -475)
      size = 825,1000
      startVal [time (s)] = 0.0
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    CodeComponent check_consent
      Code Type = Auto->JS
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      End Routine:
        if decline_button.numClicks==1:
            core.quit()
    MouseComponent mouse
      clickable = agree_button, decline_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine end_block
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    TextComponent end_block_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 55
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = You just finished a block of trials. Take a quick break. The experiment will resume in 15 seconds
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  Routine welcome
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    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 35
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the experiment!
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  Routine instructions_1
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    TextComponent instructions_1_text_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, 300)
      startVal [time (s)] = 0.0
      text = In this experiment, you will be making decisions about rectangles.
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    TextComponent instructions_1_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, -300)
      startVal [time (s)] = 0.0
      text = Press space to continue the instructions.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine instructions_2
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    TextComponent instructions_2_text_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      text = On each trial, you will see three rectangles labeled 1, 2, and 3. You will select the rectangle with the largest area by pressing the corresponding key.
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    TextComponent instructions_2_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, -300)
      startVal [time (s)] = 0.0
      text = Press space to continue the instructions.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine instructions_3
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    TextComponent instructions_3_text_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, 300)
      startVal [time (s)] = 0.0
      text = Here is an example of the rectangles you might see:
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    PolygonComponent r1_instr3
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-300, 10)
      shape = rectangle
      size = (150, 100)
      startVal [time (s)] = 0.0
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    PolygonComponent r2_instr3
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (200, 225)
      startVal [time (s)] = 0.0
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    PolygonComponent r3_instr3
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (300, 0)
      shape = rectangle
      size = (100, 75)
      startVal [time (s)] = 0.0
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    TextComponent r1_instr3_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 25
      pos = (-300, -100)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent r2_instr3_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 25
      pos = (0, -150)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent r3_instr3_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 25
      pos = (300, -100)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent instructions_3_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, -300)
      startVal [time (s)] = 0.0
      text = On this trial, rectangle 2 has the largest area, so you would press the '2' key.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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    TextComponent instructions_3_text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, -400)
      startVal [time (s)] = 0.0
      text = Press 'space' to continue the instructions.
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  Routine instructions_4
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    TextComponent instructions_4_text_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 35
      pos = (0, 200)
      startVal [time (s)] = 0.0
      text = Not all trials will be this easy. However, please try your best regardless.
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    TextComponent instructions_4_text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 35
      pos = (0, -300)
      startVal [time (s)] = 0.0
      text = Press space to continue the instructions.
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    TextComponent instructions_4_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 35
      startVal [time (s)] = 0.0
      text = There will be 3 blocks of trials. There will be a short break in between each block.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine instructions_5
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    TextComponent instructions_5_text_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 35
      startVal [time (s)] = 0.0
      text = At this point, you should let the researcher know if you have any questions.
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    TextComponent instructions_5_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 35
      pos = (0, -300)
      startVal [time (s)] = 0.0
      text = Press space to continue the instructions.
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine start_exp
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    TextComponent start_exp_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 35
      startVal [time (s)] = 0.0
      text = Press the spacebar to start the experiment.
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine debriefing
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    ImageComponent debrief_form
      anchor = bottom-center
      image = Judg_choice_debrief.png
      pos = (0, -500)
      size = (800, 1000)
      startVal [time (s)] = 0.0
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    KeyboardComponent end_debrief
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
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    CodeComponent log_import
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import logging
  Routine end
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    TextComponent end_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 35
      startVal [time (s)] = 0.0
      text = You have completed the experiment. Press 'space' to read the debriefing screen. When you are done reading, press 'space' and let the researcher know you have finished.
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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Flow
  Routine consent
  Routine exp_params
  Routine welcome
  LoopInitiator instructions_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions_1
    Routine instructions_2
    Routine instructions_3
    Routine instructions_4
    Routine instructions_5
  LoopTerminator instructions_loop
  Routine start_exp
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trials.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('effect', 'critical'), ('order', 'dhw'), ('distance', 2.0), ('config', 3.0), ('diag', 'lower'), ('h_1', 86.0), ('w_1', 86.0), ('h_2', 133.0), ('w_2', 57.0), ('h_3', 57.0), ('w_3', 133.0)]),
        OrderedDict([('effect', 'critical'), ('order', 'dhw'), ('distance', 2.0), ('config', 3.0), ('diag', 'upper'), ('h_1', 157.0), ('w_1', 157.0), ('h_2', 200.0), ('w_2', 125.0), ('h_3', 125.0), ('w_3', 200.0)]),
        OrderedDict([('effect', 'critical'), ('order', 'dhw'), ('distance', 5.0), ('config', 3.0), ('diag', 'lower'), ('h_1', 85.0), ('w_1', 85.0), ('h_2', 133.0), ('w_2', 57.0), ('h_3', 57.0), ('w_3', 133.0)]),
        OrderedDict([('effect', 'critical'), ('order', 'dhw'), ('distance', 5.0), ('config', 3.0), ('diag', 'upper'), ('h_1', 154.0), ('w_1', 154.0), ('h_2', 200.0), ('w_2', 125.0), ('h_3', 125.0), ('w_3', 200.0)]),
        OrderedDict([('effect', 'critical'), ('order', 'dhw'), ('distance', 14.0), ('config', 3.0), ('diag', 'lower'), ('h_1', 81.0), ('w_1', 81.0), ('h_2', 133.0), ('w_2', 57.0), ('h_3', 57.0), ('w_3', 133.0)]),
        OrderedDict([('effect', 'critical'), ('order', 'dhw'), ('distance', 14.0), ('config', 3.0), ('diag', 'upper'), ('h_1', 147.0), ('w_1', 147.0), ('h_2', 200.0), ('w_2', 125.0), ('h_3', 125.0), ('w_3', 200.0)]),
        OrderedDict([('effect', 'critical'), ('order', 'dwh'), ('distance', 2.0), ('config', 3.0), ('diag', 'lower'), ('h_1', 86.0), ('w_1', 86.0), ('h_2', 57.0), ('w_2', 133.0), ('h_3', 133.0), ('w_3', 57.0)])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
      Routine pre_trial
      Routine choice_trial
    LoopTerminator trials
    Routine end_block
  LoopTerminator blocks
  Routine end
  Routine debriefing
